PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1024, 768]
  expName = untitled
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Routines
  Routine trial
    TextComponent welcomeText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press Space to Start
        <SPACE>
    KeyboardComponent key_resp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
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      Before Experiment:
        from eci.NetStation import NetStation
        from time import time
      Begin Experiment:
        IP_amp = '10.10.10.42'
        IP_ntp = '10.10.10.51'
        port = 55513
        ns = NetStation(IP_amp, port)
        ns.connect(ntp_ip=IP_ntp)
        ns.begin_rec()
        t0 = time()
        n_cycles = 0
  Routine cb_white
    TextComponent whiteScreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
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    CodeComponent code1
      Code Type = Py
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      Begin Routine:
        win.color = "white"
        win.callOnFlip(ns.send_event, event_type="WHIT", start=(time() - t0))
        win.flip()
        n_cycles += 1
        if (n_cycles % 25) == 0:
            ns.resync()
  Routine cb_black
    TextComponent blackScreen
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        win.color = "black"
        win.callOnFlip(ns.send_event, event_type="BLAK", start=(time() - t0))
        win.flip()
  Routine end
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = End Experiment
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        ns.end_rec()
        ns.disconnect()
Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 200
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    Routine cb_white
    Routine cb_black
  LoopTerminator trials
  Routine end
